# BJ_08.ode
#
# This XPP file simulates a single application of IP3 to a Dual Oscillator
# Model of the pancreatic islet. From Zhang, Fendler, Peercy, Goel, Bertram, 
# Sherman, and Satin, "Long Lasting Synchronization of Calcium Oscillations 
# by Cholinergic Stimulation in Isolated Pancreatic Islets", Biophysical 
# Journal, vol. 95, pp. 4676-4688, 2008.

# Parameter vlaues for various behaviors:
#
" {Jgk=0.5, gkatpbar=16000, gkca=300, p21=0.01, p23=0.001} JTB
" {Jgk=0.5, gkatpbar=16000, gkca=300, p21=0.04, p23=0.01} compound
" {Jgk=0.6, gkatpbar=16000, gkca=300, p21=0.04, p23=0.01} regular

v(0)=-62
n(0)=0
c(0)=0.2
cer(0)=340
I(0)=0.45
g6p(0)=289
fbp(0)=3.3

# Mito variables (MGP) -  in mM
adpm(0)=11.1
nadhm(0)=0.7

# Mito Ca - in uM
cam(0)=0.4

# mV (cyto-mito)
psim(0)=163

# Cytosolic ADP concentration - in uM
adp(0)=1145

# ----------------------------------------------------------------

# Voltage clamp
par vclamp=0,vhold=-60

# Plasma membrane capacitance
num cm=5300

# Ikca
param gkca=300
num kd=0.5
ikca = gkca/(1+(kd/c)^2)*(v-vk)

# Ikatp
par gkatpbar=16000

# ICa
par gca=1000
num vca=25
num vm=-20,sm=12
minf = 1/(1+exp((vm-v)/sm))
ica = gca*minf*(v-vca)

# Ik
num vk=-75, gk=2700
num vn=-16,sn=5,taun=20
ninf = 1/(1+exp((vn-v)/sn))
Ik = gk*n*(v-vk)

# IKATP
# Dissociation constants (from Magnus and Keizer, 1998, ref.
# 1264)
num kdd=17, ktd=26, ktt=1
par Dz=0

% KATP channel open probability (from Magnus and Keizer, 1998, ref. 1264)
topo = 0.08*(1+2*mgadp/kdd) + 0.89*(mgadp/kdd)^2
bottomo = (1+mgadp/kdd)^2 * (1+adp3m/ktd+atp4m/ktt)
katpo = (topo/bottomo)
ikatp = (1-Dz)*gkatpbar*katpo*(v-vk)+Dz*gkatpbar*(v-vk)

# ----------------------------------------------------------------
###### Cytosolic Calcium Handling ######
num alpha=4.50e-6, fcyt=0.01, fer=0.01
par kpmca=0.1
num per=0.0002, kserca=0.4, lambdaer=1, epser=1
num sigmav=31
par cbas=0.05

# Ca fluxes
# Jmem = -(alpha*Ica + kpmca*c)
Jmem = -(alpha*Ica + kpmca*(c-cbas))
Jserca = kserca*c
Jleak = per*(cer - c)
#Jer = epser*(Jleak - Jserca)/lambdaer
Jer    = epser*(Jleak - Jserca)/lambdaer + Jip3
Jip3   = Oinf(c,IP3)*(cer - c)
Oinf(c,IP3) = (c/(dact+c))^3*(IP3/(dIP3+IP3))^3*(dinact/(dinact+c))^3

#Input IP3 Pulse
#The following are the parameters and functions for the IP3 pulse
par StrtPulsM=50
par durM=0.5
par IP3Amp=0.333
StrtPuls=StrtPulsM*(60000)
dur=durM*(60000)

IP3 = IP3Amp*(heav(t-StrtPuls)*heav(StrtPuls+dur-t))

#new parameters added (05/06)
#the following 3 parameters are measured in microM
#IP3=0.3 constant from phantom bursting
par dact=0.35 ,dinact=0.4 ,dIP3=0.5


# -----------------------------------------------------
# Glycolytic components

# g6p -- glucose 6-phosphate
# fbp -- fructose 1,6-bisphosphate

# Parameters
#  Jgk--glucokinase rate (uM/s)
#  Jgk_ms--glucokinase rate (uM/ms)
#  atot--total adenine nucleotide concentration (micromolar)
#  k1--Kd for AMP binding
#  k2--Kd for FBP binding
#  k3--Kd for F6P binding
#  k4--Kd for ATP binding
#  f41--ATP inhibition by weakening binding of AMP
#  f42--ATP inhibition by weakening binding of FBP
#  f43--ATP inhibition by weakening binding of F6P
#  f23--FBP activation by tightening binding of F6P
#  f13--AMP activation by tightening binding of F6P
#  lambda--ratio of PFK activity in inactivated to non-inactivated form

#  famp,etc--Kd amplification factors for heterotropic binding
#  Jgpdh--glyceraldehyde phosphate dehydrogenase rate (uM/ms)
#  kappa--converts from s to ms.
#  Jgpdh_bas--basal GPDH produced by PFK that is not M-type.

# Glycolytic parameters
num phigk=0.3, KGPDH=0.0005
par Jgk=0.5
num k4=220
num k1=30, k2=1, k3=50000
num f13=0.02, f43=20, f23=0.2, f42=20, f41=20, lambda=0.06
num VmaxPFK=5
num kappa=0.001
par Jgpdh_bas=0.0005

# Glycolytic expressions
f6p = phigk*g6p
Jgpdh = KGPDH*sqrt(fbp) 
Jgk_ms=kappa*Jgk
% aux JGPDH=Jgpdh 

# Iterative calculation of PFK
# alpha=1 -- AMP bound
# beta=1 -- FBP bound
# gamma=1 -- F6P bound
# delta=1 -- ATP bound

# (alpha,beta,gamma,delta)
# (0,0,0,0)
weight1=1
topa1=0
bottom1=1

# (0,0,0,1)
weight2=atp^2/k4
topa2=topa1
bottom2=bottom1+weight2

# (0,0,1,0)
weight3=f6p^2/k3
topa3=topa2+weight3
bottom3=bottom2+weight3

# (0,0,1,1)
weight4=(f6p*atp)^2/(f43*k3*k4)
topa4=topa3+weight4
bottom4=bottom3+weight4

# (0,1,0,0)
weight5=fbp/k2
topa5=topa4
bottom5=bottom4+weight5

# (0,1,0,1)
weight6=(fbp*atp^2)/(k2*k4*f42)
topa6=topa5
bottom6=bottom5+weight6

# (0,1,1,0)
weight7=(fbp*f6p^2)/(k2*k3*f23)
topa7=topa6+weight7
bottom7=bottom6+weight7

# (0,1,1,1)
weight8=(fbp*f6p^2*atp^2)/(k2*k3*k4*f23*f42*f43)
topa8=topa7+weight8
bottom8=bottom7+weight8

# (1,0,0,0)
weight9=amp/k1
topa9=topa8
bottom9=bottom8+weight9

# (1,0,0,1)
weight10=(amp*atp^2)/(k1*k4*f41)
topa10=topa9
bottom10=bottom9+weight10

# (1,0,1,0)
weight11=(amp*f6p^2)/(k1*k3*f13)
topa11=topa10+weight11
bottom11=bottom10+weight11

# (1,0,1,1)
weight12=(amp*f6p^2*atp^2)/(k1*k3*k4*f13*f41*f43)
topa12=topa11+weight12
bottom12=bottom11+weight12

# (1,1,0,0)
weight13=(amp*fbp)/(k1*k2)
topa13=topa12
bottom13=bottom12+weight13

# (1,1,0,1)
weight14=(amp*fbp*atp^2)/(k1*k2*k4*f42*f41)
topa14=topa13
bottom14=bottom13+weight14

# (1,1,1,0) -- the most active state of the enzyme
weight15=(amp*fbp*f6p^2)/(k1*k2*k3*f23*f13)
topa15=topa14
topb=weight15
bottom15=bottom14+weight15

# (1,1,1,1)
weight16=(amp*fbp*f6p^2*atp^2)/(k1*k2*k3*k4*f23*f13*f42*f41*f43)
topa16=topa15+weight16
bottom16=bottom15+weight16

# Phosphofructokinase rate (uM/s -> uM/ms)
% rate=(lambda*VmaxPFK*topa16 + VmaxPFK*topb)/bottom16
% pfk=rate*(atp/(atp+2))    atp saturates
pfk=(lambda*VmaxPFK*topa16 + VmaxPFK*topb)/bottom16
pfk_ms=kappa*pfk

aux pfk=pfk

# ----------------------------------------------------------------
###### Mitochondrial Ca2+ handling #######
# delta transforms  (mito volume) -> (cyto volume)/ms
# gamma transforms uM to mM.

num fmito=0.01
!delta=3.9/53.2
num gamma=0.001

### Uniporter [uM/ms]
par p21=0.04,p22=1.1
Juni=(p21*psim-p22)*c^2
# aux juni=Juni

### Na/Ca exchanger [uM/ms]
par p23=0.01
par p24=0.016
JNaCa=(p23/c)*cam*exp(p24*Psim)
# aux JNC=JNaCa

# [uM/ms] , mito -> cyto
Jmito=JNaCa-Juni
# ----------------------------------------------------------------

# ----------------------------------------------------------------
###### Mito fluxes (MK98, Cortassa et al. 2003) ######

# Mitochondrial adenine and pyridine nucleotide conservation. All in [mM].

num Amtot=15, NADmtot=10
NADm=NADmtot-NADHm
ATPm=Amtot-ADPm
RATm=ATPm/ADPm

# Pyruvate dehydrogenase (PDH) (uM/ms)
par p1=400,p2=1,p3=0.01
JPDH=(p1/(p2+NADHm/NADm))*(Cam/(p3+Cam))*(Jgpdh+Jgpdh_bas)
# aux jpdh=JPDH

# ----------------------------------------------------------------
###### Mitochondrial membrane components ######
# Inner membrane capacitance
par Cmito=1.8

#H+ leakage through mitochondrial inner membrane (uM/ms)
par p17=0.002,p18=-0.03
JHleak=p17*Psim+p18

# Respiration (uM/ms)
par p4=0.6
par p5=0.1,p6=177,p7=5
MM1=p4*NADHm/(p5+NADHm)
JO=MM1/(1+exp((Psim-p6)/p7))

aux jo=JO

# Proton pumping due to respiration  (uM/ms)
par p8=7,p9=0.1,p10=177,p11=5
MM2=p8*NADHm/(p9+NADHm)
JHres=MM2/(1+exp((Psim-p10)/p11))

# Proton flux due to ATPase (uM/ms)
par p12=120
par p13=10,p14=190,p15=8.5
b13=(p12*p13)/(p13+ATPm)
JHatp=b13/(1.0+exp((p14-Psim)/p15))

# Phosphorylation. In uM/ms.
par p16=35
b2=(p16*p13)/(p13+ATPm)
JF1F0=b2/(1.0+exp((p14-Psim)/p15))
# aux jf1f0=JF1F0

# ADP/ATP translocator. In uM/ms.
par p19=0.35, p20=2
FRT=96480/(310.16*8315)
Jant=p19*(RATm/(RATm+p20))/exp(-0.5*FRT*Psim)
aux JANT=Jant
aux RATm=RATm
aux ATPm=ATPm

# ----------------------------------------------------

###### Cytosolic nucleotide concentrations #####
par khyd=0.00005, JhydSS=0.00005
num amp=500,atot=2500
atp = atot-adp
Jhyd=(khyd*c+JhydSS)*ATP 
mgadp = 0.165*adp
adp3m = 0.135*adp
atp4m = 0.05*atp
RATc = atp/adp
aux Jhyd=Jhyd

# ----------------------------------------------------------------

# Insulin secretion component

# insulin secretion (data from Barg show that taui .leq. 1 s)
num taui=1000
num ki=0.15

Iinf = (c^2)/(ki^2 + c^2)


# ------------------------------------------------------
# Differential equations

v' = -(1-vclamp)*(Ik + Ica + Ikca + Ikatp)/cm + vclamp*(vhold-v)
n' = (ninf-n)/taun
c' = fcyt*(Jmem + Jer + delta*Jmito)
cer' = -fer*sigmav*Jer
g6p' = Jgk_ms - pfk_ms
fbp' = pfk_ms - 0.5*Jgpdh
I' = (Iinf-I)/taui

### Mitochondria 
adpm'= gamma*(JANT-JF1F0)
cam' = -fmito*Jmito
nadhm' = gamma*(Jpdh-JO)

# Mitochondrial membrane potential [mV] (cyto-mito)
Psim'=(JHres-JHatp-JANT-JHleak-JNaCa-2*Juni)/Cmito

# Cytosolic ADP concentration
adp' = -delta*JANT + Jhyd

@ meth=83, toler=1.0e-9, atoler=1.0e-9, dt=30.0, total=6000000,
@ maxstor=2000000,bounds=10000000, xp=tmin, yp=fbp
@ xlo=0, xhi=30, ylo=0, yhi=15, nout=10

# aux itot=(ica + ik + ikatp  + ikca + icrac)/1000
aux tsec=t/1000
aux tmin=t/60000
aux GKATP=gkatpbar*katpo
aux Atp=atp/1000
aux ip3fun=ip3
% aux ratio=atp/adp
aux PFK=pfk
# aux amp=amp

### average of last qqq ms
num qqq=60000
@ delay=60000
storI'=I/qqq
aux smoothI=(storI-delay(storI,qqq))

done
